MacroName ScopeUtil

# Globally set the variable $ScopeName
ScopeName = TEM1

# Globally set the variable $MessageDir
MessageDir = N:\$ScopeName

# Globally set the variable $MessagePath
MessagePath = $MessageDir\message.txt

# Globally set the variable $DropboxPath
DropboxPath = Z:

# Globally set the variable $CopyDir
CopyPath = $DropboxPath\TEMXcopy

# Globally set the variable $DataPath
DataPath = D:

# Globally set the variable PrecookMontageD
PrecookMontageD = 1

# Globally set the variable SecondsPerTile
SecondsPerTile = 20

# Globally set the variable MaxPercentChangeOverCapture
MaxPercentChangeOverCapture = 0.20